PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Paper Folding PsychoPy
  logging level = debug
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Routines
  Routine instr
    TextComponent Instructions
      font = Times New Roman
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Paper Folding Test


        In this test you are to imagine the folding and unfolding of pieces of paper. In each problem in the test there are some figures drawn at the left and there are others drawn at the right. The figures at the left represent a square piece of paper being folded, and the last of these figures has one or two small circles drawn on it to show where the paper has been punched. Each hole is punched through all the thicknesses of paper at that point. One of the five figures at the right shows where the holes will be when the paper is completely unfolded. You are to decide which one of these figures is correct and click the correct letter below the figure on your keyboard that you feel is the correct answer.

        On the next slide, you will be given an example problem in which only one hole was punched in the folded paper. When you are ready, click any key to go to the sample problem.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    TextComponent ExProblem
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = Now try the sample problem on the next slide. (In this problem only one hole was punched in the folded paper.)
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    KeyboardComponent instruction
      correctAns = C
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr2
    TextComponent part1
      font = Times New Roman
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Good job! Please read the rest of the instructions below before beginning the exam.

        In these problems all of the folds that are made are shown in the figures at the left, and the paper is not turned or moved in any way except to make the folds shown in the figures. Remember, the correct answer is the figure that shows the positions of the holes when the paper is completely unfolded.

        Your score on this test will be the number marked correctly minus a fraction of the number marked incorrectly. Therefore, it will not be to your advantage to guess unless you are able to eliminate one or more of the answer choices as wrong.

        This test has two parts. You will have 3 minutes for each of the two parts. Please use the entire time to select and check over your answers. When the time is up, you will be automatically advanced to the next screen.

        Press any key to continue
    KeyboardComponent RespInstr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Begin
    TextComponent Part1
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 1 (3 minutes)


        Remember to press the number associated with your image to click it.


        Press any key to begin
    KeyboardComponent Resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_1
    ImageComponent Questions_1
      image [set every repeat] = $ImageFile
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent participant_response_1
      allowedKeys = 'a','A','b','B','c','C','d','D','e','E' 
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine intermission
    TextComponent middle
      font = Times New Roman
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have finished Part I. When you are ready to begin Part II, click any key on your keyboard.

        You will again have 3 minutes to finish Part II.
    KeyboardComponent key_response
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_2
    ImageComponent Questions_2
      image [set every repeat] = $ImageFile
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent participant_response_2
      allowedKeys [set every repeat] = 'a','A','b','B','c','C','d','D','e','E' 
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine sample
    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'a','A','b','B','c','C','d','D','e','E'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  Routine instr
  Routine trial
  LoopInitiator sampletrial loopType="TrialHandler"
    conditions = [OrderedDict([('ImageFIle', 'sample_task/sample.png'), ('corrAns', 'C')])]
    conditionsFile = samplequestion.xlsx
    loopType = random
    nReps = 1
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    Routine sample
  LoopTerminator sampletrial
  Routine Instr2
  Routine Begin
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Images and Correct Answers Part_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'recoding_task_1/q1.png'), ('corrAns', 'A')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q2.png'), ('corrAns', 'D')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q3.png'), ('corrAns', 'B')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q4.png'), ('corrAns', 'D')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q5.png'), ('corrAns', 'B')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q6.png'), ('corrAns', 'E')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q7.png'), ('corrAns', 'A')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q8.png'), ('corrAns', 'C')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q9.png'), ('corrAns', 'E')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q10.png'), ('corrAns', 'E')])]
    Routine trial_1
  LoopTerminator trials
  Routine intermission
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Images and Correct Answers Part_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'recoding_task_2/q11.png'), ('corrAns', 'C')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q12.png'), ('corrAns', 'B')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q13.png'), ('corrAns', 'A')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q14.png'), ('corrAns', 'E')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q15.png'), ('corrAns', 'B')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q16.png'), ('corrAns', 'A')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q17.png'), ('corrAns', 'E')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q18.png'), ('corrAns', 'D')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q19.png'), ('corrAns', 'D')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q20.png'), ('corrAns', 'C')])]
    Routine trial_2
  LoopTerminator trials_2
